%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: Quac
whoAmI: 1411
firmwareVersion: "0.1"
hardwareTargets: "1.1"

registers:
  DOPortState:
    address: 32
    type: U8
    access: Write
    maskType: DigitalOutputs
    description: Reflects and specifies the state of the digital output lines.
  DOPortSet:
    address: 33
    type: U8
    access: Write
    maskType: DigitalOutputs
    description: Sets the digital output lines specified in the mask to logic HIGH.
  DOPortClear:
    address: 34
    type: U8
    access: Write
    maskType: DigitalOutputs
    description: Clears the digital output lines specified in the mask to logic LOW.

  ExternalTriggerState:
    address: 35
    type: U8
    access: Read
    maskType: DigitalInputs
    description: Reflects the raw state of the external trigger input lines.

  AOPortState:
    address: 36
    type: Float
    length: 4
    access: Write
    description: >-
      Reflects and specifies the output voltage of all four analog output
      channels in volts. Reads and writes fail with an error unless every
      channel is idle, since a channel playing a preset waveform owns its
      output value.
    payloadSpec:
      AOChannel0:
        offset: 0
        description: The output voltage of analog output channel 0 in volts.
      AOChannel1:
        offset: 1
        description: The output voltage of analog output channel 1 in volts.
      AOChannel2:
        offset: 2
        description: The output voltage of analog output channel 2 in volts.
      AOChannel3:
        offset: 3
        description: The output voltage of analog output channel 3 in volts.

  AOChannel0: &aoChannel
    address: 37
    type: Float
    access: Write
    minValue: -10
    maxValue: 10
    defaultValue: 0
    description: >-
      Reflects and specifies the output voltage of analog output channel 0 in
      volts. Writes fail with an error while this channel is playing a preset
      waveform, and reads fail with an error while any channel is playing a
      preset waveform.
  AOChannel1:
    <<: *aoChannel
    address: 38
    description: >-
      Reflects and specifies the output voltage of analog output channel 1 in
      volts. Writes fail with an error while this channel is playing a preset
      waveform, and reads fail with an error while any channel is playing a
      preset waveform.
  AOChannel2:
    <<: *aoChannel
    address: 39
    description: >-
      Reflects and specifies the output voltage of analog output channel 2 in
      volts. Writes fail with an error while this channel is playing a preset
      waveform, and reads fail with an error while any channel is playing a
      preset waveform.
  AOChannel3:
    <<: *aoChannel
    address: 40
    description: >-
      Reflects and specifies the output voltage of analog output channel 3 in
      volts. Writes fail with an error while this channel is playing a preset
      waveform, and reads fail with an error while any channel is playing a
      preset waveform.

  DacReady:
    address: 41
    type: U8
    access: Read
    maskType: AnalogOutputs
    description: Reflects which analog output channels are configured and ready to start.
  DacStart:
    address: 42
    type: U8
    access: [Write, Event]
    maskType: AnalogOutputs
    description: >-
      Starts the waveform player on the ready analog output channels specified
      in the mask. Events from this register report the channels that were
      started by an external trigger.
  DacPause:
    address: 43
    type: U8
    access: Write
    maskType: AnalogOutputs
    description: Pauses the channels set in the mask and resumes those cleared in it.
  DacAbort:
    address: 44
    type: U8
    access: Write
    maskType: AnalogOutputs
    description: Aborts waveform playback on the analog output channels specified in the mask.
  DacFinished:
    address: 45
    type: U8
    access: Event
    maskType: AnalogOutputs
    description: Reports which analog output channels have finished playing their waveform.

  ChannelExternalTriggers0: &channelExternalTriggers
    address: 46
    type: U8
    access: Write
    maskType: DigitalInputs
    description: Specifies which external trigger lines can start channel 0.
  ChannelExternalTriggers1:
    <<: *channelExternalTriggers
    address: 47
    description: Specifies which external trigger lines can start channel 1.
  ChannelExternalTriggers2:
    <<: *channelExternalTriggers
    address: 48
    description: Specifies which external trigger lines can start channel 2.
  ChannelExternalTriggers3:
    <<: *channelExternalTriggers
    address: 49
    description: Specifies which external trigger lines can start channel 3.

  ActivePlayer0: &activePlayer
    address: 50
    type: U8
    access: Write
    maskType: PlayerType
    description: Specifies which waveform player drives analog output channel 0.
  ActivePlayer1:
    <<: *activePlayer
    address: 51
    description: Specifies which waveform player drives analog output channel 1.
  ActivePlayer2:
    <<: *activePlayer
    address: 52
    description: Specifies which waveform player drives analog output channel 2.
  ActivePlayer3:
    <<: *activePlayer
    address: 53
    description: Specifies which waveform player drives analog output channel 3.

  FileSettings0: &fileSettings
    address: 54
    type: U8
    length: 45
    access: Write
    description: Specifies the file player settings for analog output channel 0.
    payloadSpec:
      Cycles:
        offset: 0
        length: 4
        interfaceType: uint
        defaultValue: 1
        description: >-
          Specifies how many times the waveform is played, or zero to play it
          indefinitely.
      Duration:
        offset: 4
        length: 4
        interfaceType: uint
        defaultValue: 0
        description: >-
          Specifies the duration of a single cycle in microseconds, or zero to
          play the whole waveform.
      UpdateFrequency:
        offset: 8
        length: 4
        interfaceType: uint
        defaultValue: 500000
        description: Specifies the sample update rate in hertz.
      Path:
        offset: 12
        length: 33
        interfaceType: string
        description: Specifies the null-terminated path of the waveform file on the SD card.
  FileSettings1:
    <<: *fileSettings
    address: 55
    description: Specifies the file player settings for analog output channel 1.
  FileSettings2:
    <<: *fileSettings
    address: 56
    description: Specifies the file player settings for analog output channel 2.
  FileSettings3:
    <<: *fileSettings
    address: 57
    description: Specifies the file player settings for analog output channel 3.

  SineSettings0: &sineSettings
    address: 58
    type: U8
    length: 28
    access: Write
    description: Specifies the sine player settings for analog output channel 0.
    # Shared by the sine and trapezoid player settings, mirroring the struct
    # hierarchy in firmware/inc/waveform_settings.h.
    payloadSpec: &functionPayload
      Cycles:
        offset: 0
        length: 4
        interfaceType: uint
        defaultValue: 1
        description: >-
          Specifies how many times the waveform is played, or zero to play it
          indefinitely.
      Duration:
        offset: 4
        length: 4
        interfaceType: uint
        defaultValue: 0
        description: >-
          Specifies the duration of a single cycle in microseconds, or zero to
          play the whole waveform.
      UpdateFrequency:
        offset: 8
        length: 4
        interfaceType: uint
        defaultValue: 500000
        description: Specifies the sample update rate in hertz.
      Frequency:
        offset: 12
        length: 4
        interfaceType: uint
        defaultValue: 1
        description: Specifies the frequency of the waveform in hertz.
      Amplitude:
        offset: 16
        length: 4
        interfaceType: float
        minValue: 0
        maxValue: 10
        defaultValue: 1
        description: >-
          Specifies the peak amplitude of the waveform in volts, measured from
          its vertical centre.
      VerticalShift:
        offset: 20
        length: 4
        interfaceType: float
        defaultValue: 1
        description: Specifies the vertical offset applied to the waveform in volts.
      NormalizedPhaseShift:
        offset: 24
        length: 4
        interfaceType: float
        minValue: -1
        maxValue: 1
        defaultValue: 0
        description: >-
          Normalized phase shift relative to the period with range:
          -1.0 (max right shift) to 1.0 (max left shift).
  SineSettings1:
    <<: *sineSettings
    address: 59
    description: Specifies the sine player settings for analog output channel 1.
  SineSettings2:
    <<: *sineSettings
    address: 60
    description: Specifies the sine player settings for analog output channel 2.
  SineSettings3:
    <<: *sineSettings
    address: 61
    description: Specifies the sine player settings for analog output channel 3.

  TrapezoidSettings0: &trapezoidSettings
    address: 62
    type: U8
    length: 40
    access: Write
    description: Specifies the trapezoid player settings for analog output channel 0.
    payloadSpec:
      <<: *functionPayload
      RampOnDuration:
        offset: 28
        length: 4
        interfaceType: uint
        defaultValue: 0
        description: Specifies the duration of the rising ramp in microseconds.
      PulseWidthDuration:
        offset: 32
        length: 4
        interfaceType: uint
        defaultValue: 0
        description: >-
          Specifies the total pulse width (including ramp-on and ramp-off
          duration) in microseconds.
      RampOffDuration:
        offset: 36
        length: 4
        interfaceType: uint
        defaultValue: 0
        description: Specifies the duration of the falling ramp in microseconds.
  TrapezoidSettings1:
    <<: *trapezoidSettings
    address: 63
    description: Specifies the trapezoid player settings for analog output channel 1.
  TrapezoidSettings2:
    <<: *trapezoidSettings
    address: 64
    description: Specifies the trapezoid player settings for analog output channel 2.
  TrapezoidSettings3:
    <<: *trapezoidSettings
    address: 65
    description: Specifies the trapezoid player settings for analog output channel 3.

bitMasks:
  DigitalInputs:
    description: Specifies the external trigger input lines available on the device.
    bits:
      None: 0x0
      DI0:
        value: 0x1
        description: External trigger input line 0.
      DI1:
        value: 0x2
        description: External trigger input line 1.
      DI2:
        value: 0x4
        description: External trigger input line 2.
      DI3:
        value: 0x8
        description: External trigger input line 3.

  DigitalOutputs:
    description: Specifies the digital output lines available on the device.
    bits:
      None: 0x0
      DO0:
        value: 0x1
        description: Digital output line 0.
      DO1:
        value: 0x2
        description: Digital output line 1.
      DO2:
        value: 0x4
        description: Digital output line 2.
      DO3:
        value: 0x8
        description: Digital output line 3.

  AnalogOutputs:
    description: Specifies the ten volt bipolar analog output channels available on the device.
    bits:
      None: 0x0
      AO0:
        value: 0x1
        description: Analog output channel 0.
      AO1:
        value: 0x2
        description: Analog output channel 1.
      AO2:
        value: 0x4
        description: Analog output channel 2.
      AO3:
        value: 0x8
        description: Analog output channel 3.

groupMasks:
  PlayerType:
    description: Specifies the waveform player driving an analog output channel.
    values:
      File:
        value: 0
        description: Plays samples streamed from a file on the SD card.
      Sine:
        value: 1
        description: Plays a synthesized sine waveform.
      Trapezoid:
        value: 2
        description: Plays a synthesized trapezoid waveform.
